PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = N-back_taskV
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Za chwilę weźmiesz udział w zadaniu składającym się z dwóch części.
        W pierwszej części będziesz obserwować kwadrat pojawiający się w różnych miejscach na ekranie.
        Twoim zadaniem jest naciśnięcie spacji, jeśli kwadrat pojawi się w tym samym miejscu co w poprzedniej próbie.
        Przykład:
        - Jeśli w pierwszej próbie kwadrat znajdował się w lewym dolnym rogu,
        - a w drugiej próbie pojawił się dokładnie w tym samym miejscu, naciśnij spację.
        - Jeśli miejsce jest inne – nie naciskaj żadnego klawisza.

        Naciśnij spację, aby rozpocząć zadanie.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Inicjalizacja zmiennych do liczenia wskaźników
        hits_nback1 = 0
        misses_nback1 = 0
        false_alarms_nback1 = 0
        correct_rejections_nback1 = 0
        reaction_times_nback1 = []

        hits_nback2 = 0
        misses_nback2 = 0
        false_alarms_nback2 = 0
        correct_rejections_nback2 = 0
        reaction_times_nback2 = []
  Routine Fixation
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    TextComponent fixation_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine N_back_1_Trial
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    ImageComponent grid_lines
      image = grid.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    PolygonComponent target_square
      fillColor = $[1.000,1.000,1.000]
      pos [set every repeat] = $nback_position
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent fixation_2
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent response
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        # N-back 1:
        is_target = corrAns is not None  # jeśli corrAns jest inne niż None, to bodziec jest celem

        if is_target and response.keys:  # poprawna reakcja na cel
            if response.corr == 1:
                hits_nback1 += 1
                reaction_times_nback1.append(response.rt)
        elif is_target and not response.keys:  # pominięcie celu
            misses_nback1 += 1
        elif not is_target and response.keys:  # fałszywy alarm
            false_alarms_nback1 += 1
        elif not is_target and not response.keys:  # poprawne odrzucenie
            correct_rejections_nback1 += 1
  Routine przejscie
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    TextComponent przejscie_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        To koniec części pierwszej.
        Teraz przejdziesz do drugiej części zadania.
        Gdy będziesz gotowy naciśnij spację.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_2
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    TextComponent instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        W tej części zadania zasady pozostają podobne do poprzedniej.
        Tym razem jednak naciśnij spację, jeśli kwadrat pojawi się w tym samym miejscu co dwie próby wcześniej, zamiast jednej próby wcześniej.
        Przykład:
        - Jeśli kwadrat w próbie 1 znajdował się w lewym dolnym rogu,
        - a w próbie 3 pojawił się tam ponownie, naciśnij spację.
        - Jeśli miejsce jest inne – nie naciskaj żadnego klawisza.

        Naciśnij spację, aby rozpocząć zadanie.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine N_back_2_trials
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    ImageComponent grid_lines_2
      image = grid.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent target_square_2
      fillColor = $[1.000,1.000,1.000]
      pos [set every repeat] = $nback_position
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    TextComponent fixation_3
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = +
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    KeyboardComponent response_2
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        # N-back 2:
        is_target = corrAns is not None  # jeśli corrAns jest inne niż None, to bodziec jest celem

        if is_target and response_2.keys:  # poprawna reakcja na cel
            if response_2.corr == 1:
                hits_nback2 += 1
                reaction_times_nback2.append(response_2.rt)
        elif is_target and not response_2.keys:  # pominięcie celu
            misses_nback2 += 1
        elif not is_target and response_2.keys:  # fałszywy alarm
            false_alarms_nback2 += 1
        elif not is_target and not response_2.keys:  # poprawne odrzucenie
            correct_rejections_nback2 += 1
  Routine podsumowanie
    RoutineSettingsComponent podsumowanie
      stopVal [duration (s)] = 0.5
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    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        // N-back 1
        total_targets_nback1 = hits_nback1 + misses_nback1;
        total_distractors_nback1 = false_alarms_nback1 + correct_rejections_nback1;

        accuracy_nback1 = ((hits_nback1 + correct_rejections_nback1) /
                           (total_targets_nback1 + total_distractors_nback1)) * 100;

        mean_rt_nback1 = reaction_times_nback1.length > 0 ? (reaction_times_nback1.reduce((a,b) => a+b) / reaction_times_nback1.length) : "NA";

        // N-back 2
        total_targets_nback2 = hits_nback2 + misses_nback2;
        total_distractors_nback2 = false_alarms_nback2 + correct_rejections_nback2;

        accuracy_nback2 = ((hits_nback2 + correct_rejections_nback2) /
                           (total_targets_nback2 + total_distractors_nback2)) * 100;

        mean_rt_nback2 = reaction_times_nback2.length > 0 ? (reaction_times_nback2.reduce((a,b) => a+b) / reaction_times_nback2.length) : "NA";

        // Razem
        hits_total = hits_nback1 + hits_nback2;
        misses_total = misses_nback1 + misses_nback2;
        false_alarms_total = false_alarms_nback1 + false_alarms_nback2;
        correct_rejections_total = correct_rejections_nback1 + correct_rejections_nback2;

        total_targets_total = hits_total + misses_total;
        total_distractors_total = false_alarms_total + correct_rejections_total;

        accuracy_total = ((hits_total + correct_rejections_total) /
                          (total_targets_total + total_distractors_total)) * 100;

        reaction_times_total = reaction_times_nback1.concat(reaction_times_nback2);
        mean_rt_total = reaction_times_total.length > 0 ? (reaction_times_total.reduce((a,b) => a+b) / reaction_times_total.length) : "NA";

        // ZAPIS DANYCH DO Pavlovii:
        psychoJS.experiment.addData('hits_nback1', hits_nback1);
        psychoJS.experiment.addData('misses_nback1', misses_nback1);
        psychoJS.experiment.addData('false_alarms_nback1', false_alarms_nback1);
        psychoJS.experiment.addData('correct_rejections_nback1', correct_rejections_nback1);
        psychoJS.experiment.addData('accuracy_nback1', accuracy_nback1);
        psychoJS.experiment.addData('mean_rt_nback1', mean_rt_nback1);

        psychoJS.experiment.addData('hits_nback2', hits_nback2);
        psychoJS.experiment.addData('misses_nback2', misses_nback2);
        psychoJS.experiment.addData('false_alarms_nback2', false_alarms_nback2);
        psychoJS.experiment.addData('correct_rejections_nback2', correct_rejections_nback2);
        psychoJS.experiment.addData('accuracy_nback2', accuracy_nback2);
        psychoJS.experiment.addData('mean_rt_nback2', mean_rt_nback2);

        psychoJS.experiment.addData('hits_total', hits_total);
        psychoJS.experiment.addData('misses_total', misses_total);
        psychoJS.experiment.addData('false_alarms_total', false_alarms_total);
        psychoJS.experiment.addData('correct_rejections_total', correct_rejections_total);
        psychoJS.experiment.addData('accuracy_total', accuracy_total);
        psychoJS.experiment.addData('mean_rt_total', mean_rt_total);
      Begin Routine:
        # N-back 1
        total_targets_nback1 = hits_nback1 + misses_nback1
        total_distractors_nback1 = false_alarms_nback1 + correct_rejections_nback1

        accuracy_nback1 = ((hits_nback1 + correct_rejections_nback1) /
                           (total_targets_nback1 + total_distractors_nback1)) * 100

        mean_rt_nback1 = sum(reaction_times_nback1) / len(reaction_times_nback1) if reaction_times_nback1 else "NA"

        # N-back 2
        total_targets_nback2 = hits_nback2 + misses_nback2
        total_distractors_nback2 = false_alarms_nback2 + correct_rejections_nback2

        accuracy_nback2 = ((hits_nback2 + correct_rejections_nback2) /
                           (total_targets_nback2 + total_distractors_nback2)) * 100

        mean_rt_nback2 = sum(reaction_times_nback2) / len(reaction_times_nback2) if reaction_times_nback2 else "NA"

        # Razem
        hits_total = hits_nback1 + hits_nback2
        misses_total = misses_nback1 + misses_nback2
        false_alarms_total = false_alarms_nback1 + false_alarms_nback2
        correct_rejections_total = correct_rejections_nback1 + correct_rejections_nback2

        total_targets_total = hits_total + misses_total
        total_distractors_total = false_alarms_total + correct_rejections_total

        accuracy_total = ((hits_total + correct_rejections_total) /
                          (total_targets_total + total_distractors_total)) * 100

        reaction_times_total = reaction_times_nback1 + reaction_times_nback2
        mean_rt_total = sum(reaction_times_total) / len(reaction_times_total) if reaction_times_total else "NA"

        # Zapis wyników lokalnie
        thisExp.addData('hits_nback1', hits_nback1)
        thisExp.addData('misses_nback1', misses_nback1)
        thisExp.addData('false_alarms_nback1', false_alarms_nback1)
        thisExp.addData('correct_rejections_nback1', correct_rejections_nback1)
        thisExp.addData('accuracy_nback1', accuracy_nback1)
        thisExp.addData('mean_rt_nback1', mean_rt_nback1)

        thisExp.addData('hits_nback2', hits_nback2)
        thisExp.addData('misses_nback2', misses_nback2)
        thisExp.addData('false_alarms_nback2', false_alarms_nback2)
        thisExp.addData('correct_rejections_nback2', correct_rejections_nback2)
        thisExp.addData('accuracy_nback2', accuracy_nback2)
        thisExp.addData('mean_rt_nback2', mean_rt_nback2)

        thisExp.addData('hits_total', hits_total)
        thisExp.addData('misses_total', misses_total)
        thisExp.addData('false_alarms_total', false_alarms_total)
        thisExp.addData('correct_rejections_total', correct_rejections_total)
        thisExp.addData('accuracy_total', accuracy_total)
        thisExp.addData('mean_rt_total', mean_rt_total)
  Routine End
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    TextComponent thank_you
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        To koniec zadania.
        Dziękujemy za udział.
    CodeComponent code_6
      Code Type = JS
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      End JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString();
        }).join('\n');

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'EDuQRfBXXb8H',
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        });
    CodeComponent code_4
      Code Type = JS
      End JS Routine:
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Flow
  Routine Instructions
  Routine Fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = N-back-1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'square': 6, 'nback_position': [0.2, 0], 'corrAns': None},
      {'square': 6, 'nback_position': [0.2, 0], 'corrAns': 'space'},
      {'square': 2, 'nback_position': [0, 0.2], 'corrAns': None},
      {'square': 9, 'nback_position': [0.2, -0.2], 'corrAns': None},
      {'square': 9, 'nback_position': [0.2, -0.2], 'corrAns': 'space'},
      {'square': 6, 'nback_position': [0.2, 0], 'corrAns': None},
      {'square': 4, 'nback_position': [-0.2, 0], 'corrAns': None},
      {'square': 3, 'nback_position': [0.2, 0.2], 'corrAns': None},
      {'square': 3, 'nback_position': [0.2, 0.2], 'corrAns': 'space'},
      {'square': 8, 'nback_position': [0, -0.2], 'corrAns': None},
      {'square': 1, 'nback_position': [-0.2, 0.2], 'corrAns': None},
      {'square': 2, 'nback_position': [0, 0.2], 'corrAns': None},
      {'square': 4, 'nback_position': [-0.2, 0], 'corrAns': None},
      {'square': 4, 'nback_position': [-0.2, 0], 'corrAns': 'space'},
      {'square': 8, 'nback_position': [0, -0.2], 'corrAns': None},
      {'square': 5, 'nback_position': [0, 0], 'corrAns': None},
      {'square': 5, 'nback_position': [0, 0], 'corrAns': 'space'},
      {'square': 1, 'nback_position': [-0.2, 0.2], 'corrAns': None},
      {'square': 3, 'nback_position': [0.2, 0.2], 'corrAns': None},
      {'square': 6, 'nback_position': [0.2, 0], 'corrAns': None},
      {'square': 1, 'nback_position': [-0.2, 0.2], 'corrAns': None},
      {'square': 1, 'nback_position': [-0.2, 0.2], 'corrAns': 'space'},
      {'square': 1, 'nback_position': [-0.2, 0.2], 'corrAns': 'space'},
      {'square': 3, 'nback_position': [0.2, 0.2], 'corrAns': None}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
    Routine N_back_1_Trial
  LoopTerminator trials
  Routine przejscie
  Routine Instructions_2
  Routine Fixation
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = N-back-2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'square': 5, 'nback_position': [0, 0], 'corrAns': None},
      {'square': 2, 'nback_position': [0, 0.2], 'corrAns': None},
      {'square': 6, 'nback_position': [0.2, 0], 'corrAns': None},
      {'square': 9, 'nback_position': [0.2, -0.2], 'corrAns': None},
      {'square': 3, 'nback_position': [0.2, 0.2], 'corrAns': None},
      {'square': 9, 'nback_position': [0.2, -0.2], 'corrAns': 'space'},
      {'square': 7, 'nback_position': [-0.2, -0.2], 'corrAns': None},
      {'square': 1, 'nback_position': [-0.2, 0.2], 'corrAns': None},
      {'square': 5, 'nback_position': [0, 0], 'corrAns': None},
      {'square': 7, 'nback_position': [-0.2, -0.2], 'corrAns': None},
      {'square': 5, 'nback_position': [0, 0], 'corrAns': 'space'},
      {'square': 6, 'nback_position': [0.2, 0], 'corrAns': None},
      {'square': 3, 'nback_position': [0.2, 0.2], 'corrAns': None},
      {'square': 6, 'nback_position': [0.2, 0], 'corrAns': 'space'},
      {'square': 8, 'nback_position': [0, -0.2], 'corrAns': None},
      {'square': 9, 'nback_position': [0.2, -0.2], 'corrAns': None},
      {'square': 9, 'nback_position': [0.2, -0.2], 'corrAns': None},
      {'square': 1, 'nback_position': [-0.2, 0.2], 'corrAns': None},
      {'square': 3, 'nback_position': [0.2, 0.2], 'corrAns': None},
      {'square': 5, 'nback_position': [0, 0], 'corrAns': None},
      {'square': 3, 'nback_position': [0.2, 0.2], 'corrAns': 'space'},
      {'square': 4, 'nback_position': [-0.2, 0], 'corrAns': None},
      {'square': 7, 'nback_position': [-0.2, -0.2], 'corrAns': None},
      {'square': 4, 'nback_position': [-0.2, 0], 'corrAns': 'space'},
      {'square': 4, 'nback_position': [-0.2, 0], 'corrAns': None}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
    Routine N_back_2_trials
  LoopTerminator trials_2
  Routine podsumowanie
  Routine End
